CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^MAX_(?P<condition>.+?)_rep(?P<replicate>[0-9]+)_(?P<channel>DAPI|G3BP1|PABPC1)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_G3BP1")
    Name to assign these images:G3BP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_PABPC1")
    Name to assign these images:PABPC1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):60,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:PABPC1
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:G3BP1
    Name the output image:G3BP1_speckles
    Select the operation:Enhance
    Feature size:6
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:G3BP1_speckles
    Name the primary objects to be identified:Puncta
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:9|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
    Parent objects:Cells
    Child objects:Puncta
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cells, Puncta
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:G3BP1
    Select objects to measure:Cells, Puncta

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cp_
    Overwrite existing files without warning?:No
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